PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = https://google.com
  Experiment info = {'participant': '', 'Group': ''}
  Full-screen window = True
  Incomplete URL = https://google.com
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = EPIDM
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    KeyboardComponent Instructions_Resp
      allowedKeys [set every repeat] = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent filename_code
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['participant']):
            Group = 'A'
        else:
            Group = 'B'
        fileName = "Group"+str(expInfo['Group'])+".csv"
        #winSize = psychoJS.Window.size;
    ImageComponent Instructions_Stim
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = $Scene
      saveStartStop = False
      size [set every repeat] = [2, 2]
      startVal [time (s)] = 0.0
      units = norm
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  Routine ITI
    TextComponent ITI_Stim
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Redo_Instructions
    KeyboardComponent Redo_Instructions_Resp
      allowedKeys [set every repeat] = 'p','r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Redo_Instructions_Top_Stim
      letterHeight = 0.05
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = to practice the experiment, press 'P'
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    TextComponent Redo_Instructions_Bottom_Stim
      letterHeight = 0.05
      pos = (0, +.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = to repeat the instructions, press 'R'
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    CodeComponent Repeat_Instructions_Trigger
      Code Type = Auto->JS
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      Each Frame:
        if Redo_Instructions_Resp.keys == 'p':
            RedoLoop = 0
        else:
            RedoLoop = 1
  Routine Practice
    TextComponent test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = test
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  Routine Encoding
    PolygonComponent L_Sq_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (-0.5, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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    PolygonComponent R_Sq_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (0.5, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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    KeyboardComponent Encoding_Resp
      allowedKeys [set every repeat] = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = .3
      stopVal [duration (s)] = 3.7
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    CodeComponent Key_Tracking_Code
      Code Type = Auto->JS
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      Begin Experiment:
        Choice_List = []
        Loop_Count = 0
        Enc_Loop_Count = 0
        PrcLoop_Count = 0
        PrcEnc_Loop_Count = 0
        ProT = 0
      Begin Routine:
        Attn = 0
        Brk_Enc = 0
        PrcAttn = 0
        PrcBrk_Enc = 0
        Resp_Fail = 0
        FB = 1
        L_Sq_FB_Stim.lineColor=[-1.0000, -1.0000, -1.0000]
        R_Sq_FB_Stim.lineColor=[-1.0000, -1.0000, -1.0000]
      End Routine:
        if Encoding_Resp.keys == 'q':
            Choice_List.append('L')
        else:
            Choice_List.append('R')
        Loop_Count += 1
        if Loop_Count >= 12:
            Attn = 1
            Loop_Count = 0
        Enc_Loop_Count += 1
        if Enc_Loop_Count >= 24:
            Brk_Enc = 1
            Enc_Loop_Count = 0
            ProT += 1
        PrcLoop_Count += 1
        if PrcLoop_Count >= 5:
            PrcAttn = 1
            PrcLoop_Count = 0
        PrcEnc_Loop_Count += 1
        if PrcEnc_Loop_Count >= 10:
            PrcBrk_Enc = 1
            PrcEnc_Loop_Count = 0
        if not Encoding_Resp.keys:
            Resp_Fail = 1
            FB = 0
        ProTracker = "Picture"+str(ProT)+".png"
    ImageComponent L_Scene_Stim
      image [set every repeat] = $L_Scene
      pos = (-0.4, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent R_Scene_Stim
      image [set every repeat] = $R_Scene
      pos = (0.4, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Feedback
    CodeComponent Border_code
      Code Type = Auto->JS
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      Begin Routine:
        if Encoding_Resp.keys:
            if Encoding_Resp.keys[-1] == 'q':
                L_Sq_FB_Stim.lineColor=[1.0000, -1.0000, -1.0000]
                R_Scene_FB_Stim.opacity=0
                R_Point_Mask.opacity=1
                R_Sq_FB_Stim.opacity=0
            elif Encoding_Resp.keys[-1]  == 'p':
                R_Sq_FB_Stim.lineColor=[1.0000, -1.0000, -1.0000]
                L_Scene_FB_Stim.opacity=0
                L_Point_Mask.opacity=1
                L_Sq_FB_Stim.opacity=0
      End Routine:
        R_Scene_FB_Stim.opacity=1.0
        R_Point_Mask.opacity=0
        L_Scene_FB_Stim.opacity=1.0
        L_Point_Mask.opacity=0
        L_Sq_FB_Stim.opacity=1
        R_Sq_FB_Stim.opacity=1
    PolygonComponent R_Sq_FB_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (0.5, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    PolygonComponent L_Sq_FB_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (-0.5, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    ImageComponent R_Scene_FB_Stim
      image [set every repeat] = $R_Scene
      pos = (0.4, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent L_Scene_FB_Stim
      image [set every repeat] = $L_Scene
      pos = (-0.4, 0.05)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent L_Point_FB_Stim
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.25
      pos = (-0.5, .8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Points_L
      units = norm
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    TextComponent R_Point_FB_Stim
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.25
      pos = (0.5, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Points_R
      units = norm
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    PolygonComponent L_Point_Mask
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      opacity = 0
      pos = (-0.5, .1)
      saveStartStop = False
      shape = rectangle
      size = (1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    PolygonComponent R_Point_Mask
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      opacity = 0
      pos = (.5, .1)
      saveStartStop = False
      shape = rectangle
      size = (1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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  Routine Attention
    ImageComponent Attn_Stim
      image [set every repeat] = AttnSlide.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Attn_resp
      allowedKeys [set every repeat] = ['0', '1', '2', '3', '4', '5']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Practice_Intro
    TextComponent Practice_Intro_Stim
      letterHeight = 0.14
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now complete a shortened version of this experiment for practice
      units = norm
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  Routine Exp_Intro
    KeyboardComponent Transition_Stim_Response
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Transition_Stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = you will now complete the full experiment
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    TextComponent Space_Stim
      letterHeight = 0.05
      pos = (0, 0-.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine Pre_Encoding_Break
    TextComponent Continue_Enc_Space
      letterHeight = 0.10
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press SPACE to continue
      units = norm
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    TextComponent Transition_Prompt_Enc
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        you will now select cards

        Reminder:
        press 'Q' to select the left card
        press 'P' to select the right card

        You have 4 seconds to respond, please respond during this time
    KeyboardComponent Transition_Enc
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Title_Encoding
    TextComponent Title_Encoding_Stim
      letterHeight = .2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Card Selection
      units = norm
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    CodeComponent Deck_Loop
      Code Type = Auto->JS
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      Begin Routine:
        Cur_Deck = 1
        Deck_Lpr = 'Deck '+str(Cur_Deck)
        Enc_Loop_Count = 0
  Routine Fixation
    ImageComponent Dealer_Stim
      image [set every repeat] = Dealer.png
      saveStartStop = False
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Encoding_Break
    TextComponent EncBrk_Prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = please take a short break before continuing
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    TextComponent Cont_Enc_Stim
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press SPACE to continue
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    TextComponent EncBrk_Warning_Prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
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      text:
        !WARNING!
        only 10 seconds remain
    TextComponent Cont_EncBrk_Prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 30
      text = please continue
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    KeyboardComponent EncBrk_Resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Point_Report_Prompt
      letterHeight = 0.05
      pos = (0,.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = So far your point total is:
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    TextComponent Point_Report_Stim
      color = -1.0000, -0.2157, -1.0000
      letterHeight = 0.1
      pos = (0,.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $PtTotal
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    ImageComponent Progress_Tracker
      image [set every repeat] = $ProTracker
      pos = (0, -.2)
      size = (1, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent Perc_stim
      image = Perc.png
      pos = (0.03, -0.28)
      saveStartStop = False
      size = (1.12, 0.12)
      startVal [time (s)] = 0.0
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  Routine Response_Fail
    TextComponent Fail_Too_Text
      letterHeight = 0.2
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Too
      units = norm
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    TextComponent Fail_Slow_Text
      letterHeight = 0.2
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Slow!
      units = norm
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  Routine Practice_End
    TextComponent practice_encoding_stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = this is the end of practice
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  Routine Experiment_End
    TextComponent Experiment_End_Stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        This is the end of the experiment

        Thank you for participating
  Routine Experiment_End_2
  Routine Reward_Reveal
    TextComponent Reward_Stim
      letterHeight = 0.1
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Based on your points you earned:
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    TextComponent Bonus_Cash
      color = -1.0000, -0.2157, -1.0000
      letterHeight = 0.15
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 9 Dollars
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  Routine Reminder
  Routine Coins
    MovieComponent Coin_Animation
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = coin.mp4
      opacity [set every repeat] = 1
      saveStartStop = False
      size = [.6, .75]
      startVal [time (s)] = 1
      volume = 0
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  Routine Deck
    TextComponent Deck_Stim
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $Deck_Lpr
    CodeComponent Deck_Loopr
      Code Type = Auto->JS
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      End Routine:
        Cur_Deck += 1
        Deck_Lpr = 'Deck '+str(Cur_Deck)
Flow
  LoopInitiator Instructions_Loop loopType="TrialHandler"
    conditionsFile = Encoding_Instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Scene', 'Slide1.png')]),
      OrderedDict([('Scene', 'Slide2.png')]),
      OrderedDict([('Scene', 'Slide3.png')]),
      OrderedDict([('Scene', 'Slide4.png')]),
      OrderedDict([('Scene', 'Slide5.png')]),
      OrderedDict([('Scene', 'Slide6.png')]),
      OrderedDict([('Scene', 'Slide7.png')]),
      OrderedDict([('Scene', 'Slide8.png')]),
      OrderedDict([('Scene', 'Slide9.png')]),
      OrderedDict([('Scene', 'Slide10.png')])]
    Routine Instructions
    Routine ITI
    Routine ITI
  LoopTerminator Instructions_Loop
  Routine Redo_Instructions
  LoopInitiator Redo_Instructions_Loop loopType="TrialHandler"
    conditionsFile = Encoding_Instructions.csv
    isTrials = False
    loopType = sequential
    nReps = RedoLoop
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    conditions:
      [OrderedDict([('Scene', 'Slide1.png')]),
      OrderedDict([('Scene', 'Slide2.png')]),
      OrderedDict([('Scene', 'Slide3.png')]),
      OrderedDict([('Scene', 'Slide4.png')]),
      OrderedDict([('Scene', 'Slide5.png')]),
      OrderedDict([('Scene', 'Slide6.png')]),
      OrderedDict([('Scene', 'Slide7.png')]),
      OrderedDict([('Scene', 'Slide8.png')]),
      OrderedDict([('Scene', 'Slide9.png')]),
      OrderedDict([('Scene', 'Slide10.png')])]
    Routine Instructions
    Routine ITI
    Routine ITI
  LoopTerminator Redo_Instructions_Loop
  Routine Practice_Intro
  Routine Pre_Encoding_Break
  Routine Title_Encoding
  Routine Deck
  LoopInitiator Practice_Encoding_Loop loopType="TrialHandler"
    conditionsFile = Practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('L_Scene', '2_4_5.png'), ('R_Scene', '2_5_2.png'), ('Points_L', '10 Points'), ('Points_R', '10 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '4_2_4.png'), ('R_Scene', '4_5_6.png'), ('Points_L', '8 Points'), ('Points_R', '8 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '33_1_7.png'), ('R_Scene', '33_6_4.png'), ('Points_L', '6 Points'), ('Points_R', '6 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '31_2_6.png'), ('R_Scene', '31_4_13.png'), ('Points_L', '10 Points'), ('Points_R', '10 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '8_2_6.png'), ('R_Scene', '8_2_14.png'), ('Points_L', '0 Points'), ('Points_R', '0 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '37_1_15.png'), ('R_Scene', '37_5_5.png'), ('Points_L', '6 Points'), ('Points_R', '6 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '9_2_10.png'), ('R_Scene', '9_3_3.png'), ('Points_L', '8 Points'), ('Points_R', '8 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '32_2_8.png'), ('R_Scene', '32_4_10.png'), ('Points_L', '0 Points'), ('Points_R', '0 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '40_3_6.png'), ('R_Scene', '40_5_14.png'), ('Points_L', '0 Points'), ('Points_R', '0 Points'), ('PtTotal', '48 points')]),
      OrderedDict([('L_Scene', '11_4_2.png'), ('R_Scene', '11_4_14.png'), ('Points_L', '4 Points'), ('Points_R', '4 Points'), ('PtTotal', '48 points')])]
    Routine Fixation
    Routine Encoding
    LoopInitiator Practice_Response_Fail_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = Resp_Fail
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      Routine Response_Fail
    LoopTerminator Practice_Response_Fail_Loop
    LoopInitiator Practice_FB_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = FB
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      Routine Feedback
    LoopTerminator Practice_FB_Loop
    LoopInitiator Practice_Attention_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = PrcAttn
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      Routine Attention
    LoopTerminator Practice_Attention_Loop
    LoopInitiator Practice_EncBrk_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = PrcBrk_Enc
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      Routine Coins
      Routine Encoding_Break
    LoopTerminator Practice_EncBrk_Loop
  LoopTerminator Practice_Encoding_Loop
  Routine ITI
  Routine Practice_End
  Routine Exp_Intro
  Routine Pre_Encoding_Break
  Routine Title_Encoding
  LoopInitiator Encoding_Loop loopType="TrialHandler"
    conditionsFile = $"Group_"+expInfo['Group']+".csv"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Deck
    LoopInitiator EncStim_Loop loopType="TrialHandler"
      conditionsFile = $blockFile
      loopType = sequential
      nReps = 1
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      Routine Fixation
      Routine Encoding
      LoopInitiator Response_Fail_Loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = Resp_Fail
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        Routine Response_Fail
      LoopTerminator Response_Fail_Loop
      LoopInitiator FB_Loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = FB
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        Routine Feedback
      LoopTerminator FB_Loop
      LoopInitiator Attention_Loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = Attn
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        Routine Attention
      LoopTerminator Attention_Loop
      LoopInitiator EncBrk_Loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = Brk_Enc
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        Routine ITI
        Routine Coins
        Routine Encoding_Break
      LoopTerminator EncBrk_Loop
    LoopTerminator EncStim_Loop
  LoopTerminator Encoding_Loop
  Routine Reward_Reveal
  Routine Experiment_End
