PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = https://google.com
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://google.com
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = EPIDM
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    KeyboardComponent Instructions_Resp
      allowedKeys [set every repeat] = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent filename_code
      Code Type = Auto->JS
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      Begin Experiment:
        Recfile = str(expInfo['participant'])+"_R.csv"
    ImageComponent Instructions_Stim
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = $Scene
      saveStartStop = False
      size [set every repeat] = [2, 2]
      startVal [time (s)] = 0.0
      units = norm
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  Routine ITI
    TextComponent ITI_Stim
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Redo_Instructions
    KeyboardComponent Redo_Instructions_Resp
      allowedKeys [set every repeat] = 'p','r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Redo_Instructions_Top_Stim
      letterHeight = 0.05
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = to practice the experiment, press 'P'
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    TextComponent Redo_Instructions_Bottom_Stim
      letterHeight = 0.05
      pos = (0, +.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = to repeat the instructions, press 'R'
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    CodeComponent Repeat_Instructions_Trigger
      Code Type = Auto->JS
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      Each Frame:
        if Redo_Instructions_Resp.keys == 'p':
            RedoLoop = 0
        else:
            RedoLoop = 1
  Routine Practice
    TextComponent test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = test
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  Routine Feedback
    CodeComponent Border_code
      Code Type = Auto->JS
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      Begin Routine:
        if Encoding_Resp.keys:
            if Encoding_Resp.keys[-1] == 'a' or Encoding_Resp.keys[-1] == 's' or Encoding_Resp.keys[-1] == 'd':
                L_Sq_FB_Stim.lineColor=[1.0000, -1.0000, -1.0000]
            elif Encoding_Resp.keys[-1] == 'j' or Encoding_Resp.keys[-1] == 'k' or Encoding_Resp.keys[-1] == 'l':
                R_Sq_FB_Stim.lineColor=[1.0000, -1.0000, -1.0000]
      End Routine:
        R_Scene_FB_Stim.opacity=1.0
        L_Scene_FB_Stim.opacity=1.0
        L_Sq_FB_Stim.opacity=1
        R_Sq_FB_Stim.opacity=1
        L_Sq_FB_Stim.lineColor=[-1.0000, -1.0000, -1.0000]
        R_Sq_FB_Stim.lineColor=[-1.0000, -1.0000, -1.0000]
    PolygonComponent R_Sq_FB_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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    PolygonComponent L_Sq_FB_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (-0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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    ImageComponent R_Scene_FB_Stim
      image [set every repeat] = $R_Scene
      pos = (0.4, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent L_Scene_FB_Stim
      image [set every repeat] = $L_Scene
      pos = (-0.4, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent Confidence_Scale_FB
      image = Response_Scale.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Attention
    ImageComponent Attn_Stim
      image [set every repeat] = AttnSlide.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Attn_resp
      allowedKeys [set every repeat] = ['a', 'o']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Practice_Intro
    TextComponent Practice_Intro_Stim
      letterHeight = 0.14
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now complete a shortened version of this experiment for practice
      units = norm
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  Routine Exp_Intro
    KeyboardComponent Transition_Stim_Response
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Transition_Stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = you will now complete the full experiment
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    TextComponent Space_Stim
      letterHeight = 0.05
      pos = (0, 0-.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine Fixation
    ImageComponent Dealer_Stim
      image [set every repeat] = Dealer.png
      saveStartStop = False
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Response_Fail
    TextComponent Fail_Too_Text
      letterHeight = 0.2
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Too
      units = norm
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    TextComponent Fail_Slow_Text
      letterHeight = 0.2
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Slow!
      units = norm
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  Routine Practice_End
    TextComponent practice_encoding_stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = this is the end of practice
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  Routine Experiment_End
    TextComponent Experiment_End_Stim
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        This is the end of the experiment

        Thank you for participating
  Routine Experiment_End_2
  Routine Reward_Reveal
    TextComponent Reward_Stim
      letterHeight = 0.1
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Please wait patiently and an experimenter will calculate how much bonus cash you earned today
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  Routine Reminder
  Routine Coins
    MovieComponent Coin_Animation
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = coin.mp4
      opacity [set every repeat] = 1
      saveStartStop = False
      size = [.6, .75]
      startVal [time (s)] = 1
      volume = 0
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  Routine Deck
    TextComponent Deck_Stim
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text [set every repeat]:
        $Deck_Lpr
    CodeComponent Deck_Loopr
      Code Type = Auto->JS
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      End Routine:
        Cur_Deck += 1
        Deck_Lpr = 'Deck '+str(Cur_Deck)
  Routine Recognition
    PolygonComponent L_Sq_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (-0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent R_Sq_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent Encoding_Resp
      allowedKeys [set every repeat] = 'a','s','d','j','k','l'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .3
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    CodeComponent Key_Tracking_Code
      Code Type = Auto->JS
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      Begin Experiment:
        Choice_List = []
        Loop_Count = 0
        Enc_Loop_Count = 0
        PrcLoop_Count = 0
        PrcEnc_Loop_Count = 0
        ProT = 0
      Begin Routine:
        Attn = 0
        Brk_Enc = 0
        PrcAttn = 0
        PrcBrk_Enc = 0
        Resp_Fail = 0
        FB = 1
      End Routine:
        if Encoding_Resp.keys == 'q':
            Choice_List.append('L')
        else:
            Choice_List.append('R')
        Loop_Count += 1
        if Loop_Count >= 10:
            Attn = 1
            Loop_Count = 0
        Enc_Loop_Count += 1
        if Enc_Loop_Count >= 16:
            Brk_Enc = 1
            Enc_Loop_Count = 0
            ProT += 1
        PrcLoop_Count += 1
        if PrcLoop_Count >= 9:
            PrcAttn = 1
            PrcLoop_Count = 0
        PrcEnc_Loop_Count += 1
        if PrcEnc_Loop_Count >= 7:
            PrcBrk_Enc = 1
            PrcEnc_Loop_Count = 0
        if not Encoding_Resp.keys:
            Resp_Fail = 1
            FB = 0
        ProTracker = "Picture"+str(ProT)+".png"
    ImageComponent L_Scene_Stim
      image [set every repeat] = $L_Scene
      pos = (-0.4, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent R_Scene_Stim
      image [set every repeat] = $R_Scene
      pos = (0.4, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent Confidence_Scale_Rec
      image = Response_Scale.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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  Routine Pre_Recognition_Break
    TextComponent Continue_Enc_Space
      letterHeight = 0.10
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press SPACE to continue
      units = norm
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    TextComponent Transition_Prompt_Enc
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        you will now select cards

        Reminder:
        press 'A', 'S', or 'D' to indicate the right card IS NOT higher valued

        press 'J', 'K', or 'L' to indicate the right card IS higher valued

        please take your time in responding
    KeyboardComponent Transition_Enc
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Title_Recognition
    TextComponent Title_Encoding_Stim
      letterHeight = .2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Card Selection
      units = norm
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  Routine Recognition_Break
    TextComponent EncBrk_Prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = please take a short break before continuing
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    TextComponent Cont_Enc_Stim
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press SPACE to continue
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    TextComponent EncBrk_Warning_Prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
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      text:
        !WARNING!
        only 10 seconds remain
    TextComponent Cont_EncBrk_Prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 30
      text = please continue
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    KeyboardComponent EncBrk_Resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent Progress_Tracker
      image [set every repeat] = $ProTracker
      pos = (0, -0.2)
      saveStartStop = False
      size = (1, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent Perc_Stim
      image = Perc.png
      pos = (0.03, -0.28)
      saveStartStop = False
      size = (1.12, 0.12)
      startVal [time (s)] = 0.0
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  Routine Confidence
    PolygonComponent R_Sq_Conf_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent L_Sq_Conf_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (-0.5, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Metamem_L_Stim
      image [set every repeat] = $L_Scene
      pos = (-0.4, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Confidence_Resp
      allowedKeys [set every repeat] = 'a','s','d','j','k','l'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
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    CodeComponent ConfBorder_Code
      Code Type = Auto->JS
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      Begin Routine:
        if Encoding_Resp.keys:
            if Encoding_Resp.keys[-1] == 'a' or Encoding_Resp.keys[-1] == 's' or Encoding_Resp.keys[-1] == 'd':
                L_Sq_Conf_Stim.lineColor=[1.0000, -1.0000, -1.0000]
            elif Encoding_Resp.keys[-1] == 'j' or Encoding_Resp.keys[-1] == 'k' or Encoding_Resp.keys[-1] == 'l':
                R_Sq_Conf_Stim.lineColor=[1.0000, -1.0000, -1.0000]
      End Routine:
        Metamem_R_Stim.opacity=1.0
        Metamem_L_Stim.opacity=1.0
        L_Sq_Conf_Stim.opacity=1
        R_Sq_Conf_Stim.opacity=1
    ImageComponent Metamem_R_Stim
      image [set every repeat] = $R_Scene
      pos = (0.4, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent Confidence_Scale
      image = Response_Scale.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (1, 0.15)
      startVal [time (s)] = 0.0
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  Routine Value
    PolygonComponent Sq_Value_Stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 7
      pos = (0, .2)
      saveStartStop = False
      shape = rectangle
      size = (0.9, 1.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Value_L_Stim
      image [set every repeat] = $L_Scene
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent Value_R_Stim
      image [set every repeat] = $R_Scene
      pos = (0, 0.12)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent Value_Slider
      forceEndRoutine = True
      granularity = 1
      labels = '0', '1', '2', '3', '4', '5'
      letterHeight = 0.05
      pos = (0, -0.28)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent Value_code
      Code Type = Auto->JS
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      Begin Routine:
        if Encoding_Resp.keys == "p":
            if Confidence_Resp.keys[-1] == 'a':
                Value_L_Stim.opacity=0
            elif Confidence_Resp.keys[-1] == 's':
                Value_L_Stim.opacity=0
            elif Confidence_Resp.keys[-1] == 'd':
                Value_L_Stim.opacity=0
            elif Confidence_Resp.keys[-1]  == 'j':
                Value_L_Stim.opacity=0
            elif Confidence_Resp.keys[-1]  == 'k':
                Value_L_Stim.opacity=0
            elif Confidence_Resp.keys[-1]  == 'l':
                Value_L_Stim.opacity=0

        if Encoding_Resp.keys == "q":
            if Confidence_Resp.keys[-1] == 'a':
                Value_R_Stim.opacity=0
            elif Confidence_Resp.keys[-1] == 's':
                Value_R_Stim.opacity=0
            elif Confidence_Resp.keys[-1] == 'd':
                Value_R_Stim.opacity=0
            elif Confidence_Resp.keys[-1]  == 'j':
                Value_R_Stim.opacity=0
            elif Confidence_Resp.keys[-1]  == 'k':
                Value_R_Stim.opacity=0
            elif Confidence_Resp.keys[-1]  == 'l':
                Value_R_Stim.opacity=0
      End Routine:
        Value_L_Stim.opacity=1.0
        Value_R_Stim.opacity=1.0
    TextComponent Value_Q_Stim
      letterHeight = 0.05
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      text = Report the value of your chosen image:
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Flow
  LoopInitiator Instructions_Loop loopType="TrialHandler"
    conditionsFile = Recognition_Instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Scene', 'Slide1.png')]),
      OrderedDict([('Scene', 'Slide2.png')]),
      OrderedDict([('Scene', 'Slide3.png')]),
      OrderedDict([('Scene', 'Slide4.png')]),
      OrderedDict([('Scene', 'Slide5.png')]),
      OrderedDict([('Scene', 'Slide6.png')]),
      OrderedDict([('Scene', 'Slide7.png')]),
      OrderedDict([('Scene', 'Slide8.png')]),
      OrderedDict([('Scene', 'Slide9.png')]),
      OrderedDict([('Scene', 'Slide10.png')]),
      OrderedDict([('Scene', 'Slide11.png')])]
    Routine Instructions
    Routine ITI
    Routine ITI
  LoopTerminator Instructions_Loop
  Routine Redo_Instructions
  LoopInitiator Redo_Instructions_Loop loopType="TrialHandler"
    conditionsFile = Recognition_Instructions.csv
    isTrials = False
    loopType = sequential
    nReps = RedoLoop
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    Routine Instructions
    Routine ITI
    Routine ITI
  LoopTerminator Redo_Instructions_Loop
  Routine Practice_Intro
  Routine Pre_Recognition_Break
  Routine Title_Recognition
  LoopInitiator Practice_Recognition_Loop loopType="TrialHandler"
    conditionsFile = Practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('L_Scene', '2_4_5.png'), ('R_Scene', '2_5_2.png')]),
      OrderedDict([('L_Scene', '4_2_4.png'), ('R_Scene', '4_5_6.png')]),
      OrderedDict([('L_Scene', '33_1_7.png'), ('R_Scene', '33_6_4.png')]),
      OrderedDict([('L_Scene', '31_2_6.png'), ('R_Scene', '31_4_13.png')]),
      OrderedDict([('L_Scene', '8_2_6.png'), ('R_Scene', '8_2_14.png')]),
      OrderedDict([('L_Scene', '37_1_15.png'), ('R_Scene', '37_5_5.png')]),
      OrderedDict([('L_Scene', '9_2_10.png'), ('R_Scene', '9_3_3.png')]),
      OrderedDict([('L_Scene', '32_2_8.png'), ('R_Scene', '32_4_10.png')]),
      OrderedDict([('L_Scene', '40_3_6.png'), ('R_Scene', '40_5_14.png')]),
      OrderedDict([('L_Scene', '11_4_2.png'), ('R_Scene', '11_4_14.png')])]
    Routine Fixation
    Routine Recognition
    LoopInitiator Practice_FB_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = FB
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      Routine Feedback
    LoopTerminator Practice_FB_Loop
  LoopTerminator Practice_Recognition_Loop
  Routine ITI
  Routine Practice_End
  Routine Exp_Intro
  Routine Pre_Recognition_Break
  Routine Title_Recognition
  LoopInitiator RecStim_Loop loopType="TrialHandler"
    conditionsFile = $Recfile
    loopType = sequential
    nReps = 1
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    Routine Fixation
    Routine Recognition
    LoopInitiator FB_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = FB
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      Routine Feedback
    LoopTerminator FB_Loop
    LoopInitiator RecBrk_Loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = Brk_Enc
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      Routine Recognition_Break
    LoopTerminator RecBrk_Loop
  LoopTerminator RecStim_Loop
  Routine ITI
  Routine Coins
  Routine Reward_Reveal
  Routine Experiment_End
